PsychoPy2experiment version="2021.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '001', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = 250506_Memory_MR
  keyboardBackend = ioHub
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Routines
  Routine screenshots
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        imCentersMC = [[0, 0.25], [0, (-0.25)]];
        #centers for bounding box
        #imCentersBB = [[0, 0.5], [0, (-0.5)]];
      Begin Routine:
        # For fixation cross jitter
        import random

        jitter = random.uniform(1,2)
        current_jitter = jitter
        thisExp.addData('ITI_jitter', current_jitter)
        thisExp.addData('ITI_Memory.startTime', globalClock.getTime())

        # To shuffle stimulus locations and correct responses
        shuffle(imCentersMC)

        MCimg1 = imCentersMC[0]
        MCimg2 = imCentersMC[1]


        thisExp.addData('xAxes', MCimg1[0]) #position along the x axis correct
        thisExp.addData('yAxes', MCimg1[1]) #position along the y axis correct

        if ((MCimg1[0] == 0) and (MCimg1[1] == (0.25))):
            MCfam_keyboard = 1
        elif((MCimg1[0] == 0) and (MCimg1[1] == (-0.25))):
            MCfam_keyboard = 2


        thisExp.addData('MCposCorrPic', MCfam_keyboard);
        thisExp.addData('MCRandPositions', imCentersMC);
      Each Frame:
        if thisTrial['condition'] == 'NE':
            image_before.setOpacity(0)
            image_after.setOpacity(0)
            index_finger_text.setOpacity(0)
            middle_finger_text.setOpacity(0)
            fixation.draw()  # Draw the fixation cross
        else:
            image_before.setOpacity(1)
            image_after.setOpacity(1)
            index_finger_text.setOpacity(1)
            middle_finger_text.setOpacity(1)
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_jitter
      text [set every repeat] = +
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    ImageComponent image_before
      anchor = top-center
      image [set every repeat] = $before
      pos [set every repeat] = MCimg1
      size = (0.8, 0.45)
      startVal [time (s)] = current_jitter + 0.2
      stopVal [duration (s)] = 5
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    ImageComponent image_after
      anchor = bottom-center
      image [set every repeat] = $after
      pos [set every repeat] = MCimg2
      size = (0.8, 0.45)
      startVal [time (s)] = current_jitter + 0.2
      stopVal [duration (s)] = 5
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    KeyboardComponent order_choice
      allowedKeys [set every repeat] = '2','3'
      correctAns = $MCfam_keyboard
      forceEndRoutine = True
      startVal [time (s)] = current_jitter + 0.2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent index_finger_text
      letterHeight = 0.05
      pos = (-0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = current_jitter + 0.2
      stopVal [duration (s)] = 5
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      text:
        index
        finger
    TextComponent middle_finger_text
      letterHeight = 0.05
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = current_jitter + 0.2
      stopVal [duration (s)] = 5
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      text:
        middle
        finger
  Routine end_screen
    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you, this task is now finished.

        Please stay still.
    KeyboardComponent end_button
      allowedKeys = 'space', 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be asked to decide which one of the two screenshots displayed on the screen appeared first within a video you saw in the first session.

        Screenshots will appear on the screen at the same time and your task is to press with your index finger if the top picture appeared first, or with your middle finger if the bottom picture appeared first. If you are not sure, go with your best guess.

        Try to respond as fast as you can.

        The task will start soon. Please stay still.
    KeyboardComponent trigger
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = memoryTask_inputs\memory_condition1_2.csv
    loopType = random
    nReps = 1
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    Routine screenshots
  LoopTerminator trials
  Routine end_screen
